PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = FixMarkTask
  Screen = 1
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Routines
  Routine FixTrials
    TextComponent text
      color [set every repeat] = $Colour
      text = +
      stopVal [duration (s)] = $Time
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      stopVal [duration (s)] = $Time
      forceEndRoutine = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ../../../../Users/rohansopp/Documents/Psychopy practice/FixationTest.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([(u'Colour', u'Red'), (u'Time', 2)]),
      OrderedDict([(u'Colour', u'Green'), (u'Time', 4)]),
      OrderedDict([(u'Colour', u'Blue'), (u'Time', 6)]),
      OrderedDict([(u'Colour', u'Red'), (u'Time', 4)]),
      OrderedDict([(u'Colour', u'Green'), (u'Time', 6)]),
      OrderedDict([(u'Colour', u'Blue'), (u'Time', 2)]),
      OrderedDict([(u'Colour', u'Red'), (u'Time', 6)]),
      OrderedDict([(u'Colour', u'Green'), (u'Time', 2)]),
      OrderedDict([(u'Colour', u'Blue'), (u'Time', 4)])]
    Routine FixTrials
  LoopTerminator trials
